<!-- Model level Anotation -->
<!-- <Annotation> -->
    <!-- &lt;!&ndash; Taxonomy &ndash;&gt;  -->
    <!-- <bqbiol:hasTaxon>
            <rdf:Bag>
                <rdf:li rdf:resource="http://identifiers.org/taxonomy/9606">
        </rdf:Bag>
    </bqbiol:hasTaxon> -->

    <!-- &lt;!&ndash; Tissue &ndash;&gt;  -->
    <!-- <bqbiol:occursIn>
        <rdf:Bag>
            <rdf:li rdf:resource="http://identifiers.org/bto/BTO:0000286">
        </rdf:Bag>
    </bqbiol:occursIn> -->

    <!-- &lt;!&ndash; Cell Type &ndash;&gt;  -->


    <!-- &lt;!&ndash; Modeling Approach &ndash;&gt;  -->
    <!-- <bqbiol:isPropertyOf>
            <rdf:Bag>
                <rdf:li rdf:resource="http://identifiers.org/mamo/MAMO_0000024">
        </rdf:Bag>
    </bqbiol:isPropertyOf> -->

    <!-- &lt;!&ndash; Biological Process &ndash;&gt;  -->
    <!-- <bqbiol:hasProperty>
            <rdf:Bag>
                <rdf:li rdf:resource="http://identifiers.org/go/GO:0042060">
        </rdf:Bag>
    </bqbiol:hasProperty> -->

    <!--  Model Relevance to a Particular Area  -->
    <!-- <bqbiol:hasProperty>
            <rdf:Bag>
                <rdf:li rdf:resource="http://identifiers.org/ncit/C17206">
        </rdf:Bag>
    </bqbiol:hasProperty> -->
<!-- </Annotation> -->

<!-- Stroma version ZERO -->
<CompuCell3D Revision="0" Version="4.4">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>4</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
    <Potts>
       
       <!-- Basic properties of CPM (GGH) algorithm -->
       <Dimensions x="200" y="80" z="1"/>
       <Steps>100000</Steps>
       <Temperature>10.0</Temperature>
       <NeighborOrder>1</NeighborOrder>
       <!-- <LatticeType>Hexagonal</LatticeType> -->
    </Potts>
   
    <Plugin Name="CellType">
       
       <!-- Listing all cell types in the simulation -->
       <CellType TypeId="0" TypeName="Medium"/>
       <CellType TypeId="1" TypeName="STEM"/>
       <CellType Freeze="" TypeId="2" TypeName="LIMB"/>
       <CellType TypeId="3" TypeName="BASAL"/>
       <CellType TypeId="4" TypeName="WING"/>
       <CellType TypeId="5" TypeName="SUPER"/>
       <CellType Freeze=""  TypeId="6" TypeName="MEMB"/>
       <CellType TypeId="7" TypeName="STROMA"/>
       <CellType TypeId="8" TypeName="KERATO"/>
       <CellType TypeId="9" Freeze="" TypeName="WALL"/>
    </Plugin>
   
   <Plugin Name="Volume"/>

   <Plugin Name="Surface"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
<!--     
   <Plugin Name="AdhesionFlex">
   
   Specification of adhesion energies as a function of cadherin concentration at cell membranes
   Adhesion energy is a function of two cells in ocntact. the functional form is specified by the user
   <AdhesionMolecule Molecule="HEMI"/>
   <AdhesionMolecule Molecule="DESMO"/>
   <AdhesionMolecule Molecule="ZO_1"/>
   <AdhesionMolecule Molecule="TJ"/>
   
   <AdhesionMoleculeDensity CellType="Medium" Density="0.0" Molecule="HEMI"/>
   <AdhesionMoleculeDensity CellType="Medium" Density="0.0" Molecule="DESMO"/>
   <AdhesionMoleculeDensity CellType="Medium" Density="0.0" Molecule="ZO_1"/>
   <AdhesionMoleculeDensity CellType="Medium" Density="0.0" Molecule="TJ"/>
   
   <AdhesionMoleculeDensity CellType="STEM" Density="1.1" Molecule="HEMI"/>
   <AdhesionMoleculeDensity CellType="STEM" Density="1.1" Molecule="DESMO"/>
   <AdhesionMoleculeDensity CellType="STEM" Density="0.0" Molecule="ZO_1"/>
   <AdhesionMoleculeDensity CellType="STEM" Density="0.0" Molecule="TJ"/>
   
   <AdhesionMoleculeDensity CellType="LIMB" Density="1.1" Molecule="HEMI"/>
   <AdhesionMoleculeDensity CellType="LIMB" Density="0.0" Molecule="DESMO"/>
   <AdhesionMoleculeDensity CellType="LIMB" Density="0.0" Molecule="ZO_1"/>
   <AdhesionMoleculeDensity CellType="LIMB" Density="0.0" Molecule="TJ"/>
   
   <AdhesionMoleculeDensity CellType="BASAL" Density="1.1" Molecule="HEMI"/>
   <AdhesionMoleculeDensity CellType="BASAL" Density="1.1" Molecule="DESMO"/>
   <AdhesionMoleculeDensity CellType="BASAL" Density="0.0" Molecule="ZO_1"/>
   <AdhesionMoleculeDensity CellType="BASAL" Density="0.0" Molecule="TJ"/>
   
   <AdhesionMoleculeDensity CellType="WING" Density="0.0" Molecule="HEMI"/>
   <AdhesionMoleculeDensity CellType="WING" Density="1.1" Molecule="DESMO"/>
   <AdhesionMoleculeDensity CellType="WING" Density="2.1" Molecule="ZO_1"/>
   <AdhesionMoleculeDensity CellType="WING" Density="0.0" Molecule="TJ"/>
   
   <AdhesionMoleculeDensity CellType="SUPER" Density="0.0" Molecule="HEMI"/>
   <AdhesionMoleculeDensity CellType="SUPER" Density="0.0" Molecule="DESMO"/>
   <AdhesionMoleculeDensity CellType="SUPER" Density="0.0" Molecule="ZO_1"/>
   <AdhesionMoleculeDensity CellType="SUPER" Density="2.1" Molecule="TJ"/>
   
   <AdhesionMoleculeDensity CellType="MEMB" Density="1.1" Molecule="HEMI"/>
   <AdhesionMoleculeDensity CellType="MEMB" Density="0.0" Molecule="DESMO"/>
   <AdhesionMoleculeDensity CellType="MEMB" Density="0.0" Molecule="ZO_1"/>
   <AdhesionMoleculeDensity CellType="MEMB" Density="0.0" Molecule="TJ"/>
   
   <AdhesionMoleculeDensity CellType="STROMA" Density="0.0" Molecule="HEMI"/>
   <AdhesionMoleculeDensity CellType="STROMA" Density="0.0" Molecule="DESMO"/>
   <AdhesionMoleculeDensity CellType="STROMA" Density="0.0" Molecule="ZO_1"/>
   <AdhesionMoleculeDensity CellType="STROMA" Density="0.0" Molecule="TJ"/>
   
   <AdhesionMoleculeDensity CellType="KERATO" Density="0.0" Molecule="HEMI"/>
   <AdhesionMoleculeDensity CellType="KERATO" Density="0.0" Molecule="DESMO"/>
   <AdhesionMoleculeDensity CellType="KERATO" Density="0.0" Molecule="ZO_1"/>
   <AdhesionMoleculeDensity CellType="KERATO" Density="0.0" Molecule="TJ"/>
   
   <BindingFormula Name="Hill">     
     <Formula>(Molecule1^4 * Molecule2^4) / ((0.5^4) + ((Molecule1^4) * (Molecule2^4)))</Formula>
     <Formula>(Molecule1 * Molecule2 )</Formula>
      
      <Variables>      
         <AdhesionInteractionMatrix>
         
            <BindingParameter Molecule1="HEMI" Molecule2="HEMI">1.0</BindingParameter>
            <BindingParameter Molecule1="HEMI" Molecule2="DESMO">0.0</BindingParameter>
            <BindingParameter Molecule1="HEMI" Molecule2="ZO_1">0.0</BindingParameter>
            <BindingParameter Molecule1="HEMI" Molecule2="TJ">0.0</BindingParameter>
            
            <BindingParameter Molecule1="DESMO" Molecule2="DESMO">1.0</BindingParameter>
            <BindingParameter Molecule1="DESMO" Molecule2="ZO_1">0.0</BindingParameter>
            <BindingParameter Molecule1="DESMO" Molecule2="TJ">0.0</BindingParameter>
            
            <BindingParameter Molecule1="ZO_1" Molecule2="ZO_1">1.0</BindingParameter>
            <BindingParameter Molecule1="ZO_1" Molecule2="TJ">0.0</BindingParameter>
            
            <BindingParameter Molecule1="TJ" Molecule2="TJ">2.0</BindingParameter>
            
         </AdhesionInteractionMatrix>
      </Variables>
      
   </BindingFormula>
   <NeighborOrder>2</NeighborOrder>
</Plugin> -->


   
    <Plugin Name="Contact">
       Specification of adhesion energies
       <Energy Type1="Medium" Type2="Medium">10.0</Energy>
       <Energy Type1="Medium" Type2="STEM">10.0</Energy>
       <Energy Type1="Medium" Type2="LIMB">10.0</Energy>
       <Energy Type1="Medium" Type2="BASAL">20.0</Energy>
       <Energy Type1="Medium" Type2="WING">10.0</Energy>
       <Energy Type1="Medium" Type2="SUPER">5.0</Energy>
       <Energy Type1="Medium" Type2="MEMB">10.0</Energy>
       <Energy Type1="Medium" Type2="STROMA">10.0</Energy>
       <Energy Type1="Medium" Type2="KERATO">10.0</Energy>

       <Energy Type1="STEM" Type2="STEM">10.0</Energy>
       <Energy Type1="STEM" Type2="LIMB">5.0</Energy>
       <Energy Type1="STEM" Type2="BASAL">10.0</Energy>
       <Energy Type1="STEM" Type2="WING">10.0</Energy>
       <Energy Type1="STEM" Type2="SUPER">10.0</Energy>
       <Energy Type1="STEM" Type2="MEMB">5.0</Energy>
       <Energy Type1="STEM" Type2="STROMA">10.0</Energy>
       <Energy Type1="STEM" Type2="KERATO">10.0</Energy>

       <Energy Type1="LIMB" Type2="LIMB">10.0</Energy>
       <Energy Type1="LIMB" Type2="BASAL">10.0</Energy>
       <Energy Type1="LIMB" Type2="WING">10.0</Energy>
       <Energy Type1="LIMB" Type2="SUPER">10.0</Energy>
       <Energy Type1="LIMB" Type2="MEMB">10.0</Energy>
       <Energy Type1="LIMB" Type2="STROMA">10.0</Energy>
       <Energy Type1="LIMB" Type2="KERATO">10.0</Energy>

       <Energy Type1="BASAL" Type2="BASAL">10.0</Energy>
       <Energy Type1="BASAL" Type2="WING">10.0</Energy>
       <Energy Type1="BASAL" Type2="SUPER">15.0</Energy>
       <Energy Type1="BASAL" Type2="MEMB">5.0</Energy>
       <Energy Type1="BASAL" Type2="STROMA">10.0</Energy>
       <Energy Type1="BASAL" Type2="KERATO">10.0</Energy>

       <Energy Type1="WING" Type2="WING">5.0</Energy>
       <Energy Type1="WING" Type2="SUPER">6.0</Energy>
       <Energy Type1="WING" Type2="MEMB">15.0</Energy>
       <Energy Type1="WING" Type2="STROMA">10.0</Energy>
       <Energy Type1="WING" Type2="KERATO">10.0</Energy>

       <Energy Type1="SUPER" Type2="SUPER">4.0</Energy>
       <Energy Type1="SUPER" Type2="MEMB">15.0</Energy>
       <Energy Type1="SUPER" Type2="STROMA">10.0</Energy>
       <Energy Type1="SUPER" Type2="KERATO">10.0</Energy>

       <Energy Type1="MEMB" Type2="MEMB">10.0</Energy>
       <Energy Type1="MEMB" Type2="STROMA">10.0</Energy>
       <Energy Type1="MEMB" Type2="KERATO">10.0</Energy>

       <Energy Type1="STROMA" Type2="STROMA">10.0</Energy>
       <Energy Type1="STROMA" Type2="KERATO">10.0</Energy>
       <Energy Type1="KERATO" Type2="KERATO">10.0</Energy>
       <NeighborOrder>4</NeighborOrder>
    </Plugin>
    
   <Plugin Name="PixelTracker"> 
       
        <!-- Module tracking pixels of each cell -->
   </Plugin>
   <Plugin Name="BoundaryPixelTracker">
   
      <!-- Module tracking boundary pixels of each cell -->
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
    <!-- <Plugin Name="LengthConstraint">
       
       Applies elongation constraint to each cell. Users specify target length of major axis -TargetLength (in 3D additionally, target length of minor axis - MinorTargetLength) and a strength of the constraint -LambdaLength. Parameters are specified for each cell type
       IMPORTANT: To prevent cell fragmentation for large elongations you need to also use connectivity constraint -->
       <!-- LengthConstraint plugin with no body: <Plugin Name="LengthConstraint"/> permits constraint specification for individual cells -->
       <!-- Comment out the constrains for cell types which don't need them -->
       <!-- <LengthEnergyParameters CellType="STEM" LambdaLength="2.0" TargetLength="25"/> -->
       <!-- <LengthEnergyParameters CellType="LIMB" LambdaLength="2.0" TargetLength="25"/> -->
       <!-- <LengthEnergyParameters CellType="BASAL" LambdaLength="2.0" TargetLength="25"/> -->
       <!-- <LengthEnergyParameters CellType="WING" LambdaLength="2.0" TargetLength="25"/> -->
       <!-- <LengthEnergyParameters CellType="SUPER" LambdaLength="5.0" TargetLength="15"/> -->
       <!-- <LengthEnergyParameters CellType="MEMB" LambdaLength="2.0" TargetLength="25"/> -->
       <!-- <LengthEnergyParameters CellType="STROMA" LambdaLength="2.0" TargetLength="25"/> -->
       <!-- <LengthEnergyParameters CellType="KERATO" LambdaLength="2.0" TargetLength="25"/> -->
       <!-- <LengthEnergyParameters CellType="WALL" LambdaLength="2.0" TargetLength="25"/>
    </Plugin> -->


   <Plugin Name="Chemotaxis">
      <ChemicalField Name="BASALMVBIAS" >
      <!-- You may repeat ChemicalField element for each chemical field declared in the PDE solvers -->
       </ChemicalField>
     <!-- Specification of chemotaxis properties of select cell types. -->
   </Plugin>

   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->

      <!-- Notes: Calculations for diffusion constants -->
      <!-- Whole simulation has 160 µm Height and 400 µm Width 
      An hour is 10 mcs

      EGF Diffusion constant 5.18 +/- 0.16 x 10(-7) (SE) cm^2/s {DOI: 10.1152/jn.00352.2004, PMID: 15269225}
      5.18 µm^2/s * 3600 s/hour = 18648 µm^2/hour

      CC3D diffusion constant = 18648 µm^2/hour * (1 voxel/2 µm)^2 * (1 hour/10 MCS) = 186.48 voxels^2/MCS 
      Hex transformed to 161 voxels^2/MCS         

      The diffusion length L is related to the diffusion constant D and the time t by: 
      L = sqrt(2Dt)

      Given that the diffusion constant is 5.18 µm^2/s, and 1 mcs is 6 minutes (or 360 seconds):

      Using the above formula and given D, we can find the diffusion length for 1 mcs:

      L = sqrt(2 x 5.18 µm^2/s x 360 s)
      L ≈ sqrt(3724.8 µm^2)
      L ≈ 61 µm or 30.5 voxels with no decay.
      
      EGF has a variable circulating half life, ranging from 42 minutes to 114 minutes. [PMID: 1748552]
      To determine the decay constant, the formula relating the decay constant (λ) and the half-life (T_half) is:
      λ = ln(2) / T_half
      
      For an EGF half-life (T_half) of 42 minutes (or 2520 seconds):
      λ_lower = ln(2) / 2520 seconds
      λ_lower ≈ 0.0002750584 s

      For 1 mcs (6 minutes or 360 seconds):
      λ_mcs_lower = 0.0002750584 x 360
      λ_mcs_lower ≈ 0.09902102579 per mcs

      For an EGF half-life (T_half) of 114 minutes (or 6840 seconds):
      λ_upper = ln(2) / 6840 seconds
      λ_upper ≈ 0.0001013373 s

      For 1 mcs (6 minutes or 360 seconds):
      λ_mcs_upper = 0.0001013373 x 360
      λ_mcs_upper ≈ 0.03648143055 per mcs

      For an EGF half-life (T_half) of 78 minutes (or 4680 seconds):
      λ_mean = ln(2) / 4680 seconds
      λ_mean ≈ 0.00014810837 s

      For 1 mcs (6 minutes or 360 seconds):
      λ_mcs_mean = 0.00014810837 x 360
      λ_mcs_mean ≈ 0.05331901388 per mcs
      
      Considering both diffusion and decay, the diffusion length (L') can be approximated as:
      L' = sqrt(2D/λ)

      For the lower limit:
      L' = sqrt((2 x 186) / 0.09902102579)
      L' ≈  abs(61.2925597984) 61 voxels 

      For the upper limit:
      L' = sqrt((2 x 186) / 0.03648143055)
      L' ≈ abs(100.980040358) 100 voxels

      For the upper limit:
      L' = sqrt((2 x 186) / 0.05331901388)
      L' ≈ abs(83.5276793581) 83 voxels -->
      <DiffusionField Name="EGF">
         <DiffusionData>
            <FieldName>EGF</FieldName>
            
            <GlobalDiffusionConstant id="EGF_GlbDiff">186</GlobalDiffusionConstant>
            <!--
               For EGF in the cornea:
               GlobalDecayConstant_upper  = 0.03648143055
               GlobalDecayConstant_mean   = 0.05331901388
               GlobalDecayConstant_lower  = 0.09902102579
               Set default to mean
             -->
            <GlobalDecayConstant id="EGF_GlobalDecay">0.05331901388</GlobalDecayConstant>

            <!-- Additional options are: 0.000001 -->            
            <!-- <InitialConcentrationExpression>1/(1 + exp(-10*(y - 80))) - 1/(1 + exp(-10*(y - 65)))</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="SUPER" id="EGF_Coef_SUPER">186</DiffusionCoefficient>
            <DiffusionCoefficient CellType="MEMB">0.0</DiffusionCoefficient>
            <DiffusionCoefficient CellType="LIMB">0.0</DiffusionCoefficient>
            <DiffusionCoefficient CellType="WALL">0.0</DiffusionCoefficient>             
            <!-- <DecayCoefficient CellType="WALL">0.0</DecayCoefficient> -->
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="cell">0.1</Secretion> -->
            <!-- <SecretionOnContact SecreteOnContactWith="cell" Type="cell">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="cell">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
               <!-- <ConstantValue PlanePosition="Max" Value="5.0"/> -->               
               <!-- <Periodic/> -->               
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
            </Plane>
            <Plane Axis="Y">
               <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="1.0"/>               
               <!-- <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>  -->               
               <!-- <Periodic/> -->               
            </Plane>
         </BoundaryConditions>
      </DiffusionField> 

      <!-- BASAL CELL MOVEMENT BIAS -->
      <DiffusionField Name="BASALMVBIAS">
         <DiffusionData>
            <FieldName>BASALMVBIAS</FieldName>
            <!-- <GlobalDiffusionConstant id = "BASALMVBIAS_GlbDiff">1.0</GlobalDiffusionConstant> -->
            <!-- <GlobalDecayConstant>0.0</GlobalDecayConstant> -->
            <!-- <InitialConcentrationExpression>(x/2) + (y/4) </InitialConcentrationExpression> -->
            <!-- <DiffusionCoefficient CellType="MEMB">1.0</DiffusionCoefficient>              -->
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="MEMB">0.1</Secretion> -->
            <SecretionOnContact id = "Basal_bias_xml" SecreteOnContactWith="Medium" Type="Medium">0.0</SecretionOnContact>
            <!-- <ConstantConcentration Type="cell">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <!-- <ConstantValue PlanePosition="Min" Value="0.0"/>
               <ConstantValue PlanePosition="Max" Value="1.0"/> -->
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
               <!-- <Periodic/> -->               
            </Plane>
            <Plane Axis="Y">
               <!-- <ConstantValue PlanePosition="Min" Value="0.0"/> -->
               <!-- <ConstantValue PlanePosition="Max" Value="1.0"/> -->               
               <ConstantDerivative PlanePosition="Min" Value="0.0"/>
               <ConstantDerivative PlanePosition="Max" Value="0.0"/>
               <!-- <Periodic/> -->               
            </Plane>
         </BoundaryConditions>
      </DiffusionField>       

   </Steppable>
   <Plugin Name="Secretion">
   
   <!-- Specification of secretion properties of select cell types. -->
   <!-- You may repeat Field element for each chemical field declared in the PDE solvers -->
   <!-- Specification of secretion properties of individual cells can be done in Python -->
   <!-- <Field Name="FIELD_FROM_PDE_SOLVER"> -->
      <!-- <Secretion Type="CELL_TYPE_NAME">0.1</Secretion> -->
      <!-- <SecretionOnContact SecreteOnContactWith="COMMA_SEPARATED_TYPE_NAMES" Type="CELL_TYPE_NAME">1.1</SecretionOnContact> -->
      <!-- <ConstantConcentration Type="CELL_TYPE_NAME">0.5</ConstantConcentration> -->
   <!-- </Field> -->
   </Plugin>
   
    <Steppable Type="PIFInitializer">
   
        <!-- Initial layout of cells using PIFF file. Piff files can be generated using PIFGEnerator -->
        <PIFName>Homeostasis with Stroma without change in Limbus.piff</PIFName>
    </Steppable>
   <Steppable Type="UniformInitializer">
      <!-- <Region>
         <BoxMin x="0" y="0" z="0"/>
         <BoxMax x="200" y="1" z="1"/>
         <Gap>0</Gap>
         <Width>1</Width>
         <Types>WALL</Types>
      </Region> -->
      <!-- <Region>
         <BoxMin x="0" y="79" z="0"/>
         <BoxMax x="200" y="80" z="1"/>
         <Gap>0</Gap>
         <Width>1</Width>
         <Types>WALL</Types>
      </Region> -->
      <Region>
         <BoxMin x="0" y="0" z="0"/>
         <BoxMax x="1" y="80" z="1"/>
         <Gap>0</Gap>
         <Width>1</Width>
         <Types>WALL</Types>
      </Region>
      <Region>
         <BoxMin x="199" y="0" z="0"/>
         <BoxMax x="200" y="80" z="1"/>
         <Gap>0</Gap>
         <Width>1</Width>
         <Types>WALL</Types>
      </Region>  
      
   </Steppable> 
</CompuCell3D>
